WorkflowBuilder(Version=2.8.0-alpha015)
Annotation(Text="")
-> GroupWorkflow Settings
    StringProperty(Value=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test) => #0
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.UtcDateTime)
    -> Format(Format={0}, Selector=it)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
      Expression: it.Replace(":","_").Replace(".","_").Replace("/","_")
    #4, #0 -> Zip
    -> Take(Count=1)
    -> Format(Format={1}-{0}, Selector="Item1,Item2")
    -> AsyncSubject LoggingRootPath

    FloatProperty(Value=1)
    -> Take(Count=1)
    -> AsyncSubject ScalingFactor

    PropertySource<Bonsai.Vision.Resize,OpenCV.Net.Size>(MemberName=Size, Value(Width=128, Height=128))
    -> Take(Count=1)
    -> AsyncSubject FlyCenteredCropSize

    PropertySource<Bonsai.Vision.FileCapture,System.String>(MemberName=FileName, Value=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.avi)
    -> Take(Count=1)
    -> AsyncSubject VideoFileName

    PropertySource<Bonsai.Vision.FileCapture,System.String>(MemberName=FileName, Value=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.csv)
    -> Take(Count=1)
    -> AsyncSubject CsvFileName

    PropertySource<Bonsai.Sleap.PredictSinglePose,System.String> => #21
      MemberName=ModelFileName
      Value=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FlyHigherTracker\FlyHigherTracker\Workflows\Extensions\modelfile.pb
    PropertySource<Bonsai.Sleap.PredictSinglePose,System.String> => #22
      MemberName=TrainingConfig
      Value=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FlyHigherTracker\FlyHigherTracker\Workflows\Extensions\training_config.json
    PropertySource<Bonsai.Sleap.PredictSinglePose,System.Nullable(OpenCV.Net.ColorConversion)>(MemberName=ColorConversion, Value=nil) => #23
    PropertySource<Bonsai.Sleap.PredictSinglePose,System.Nullable(System.Single)>(MemberName=ScaleFactor, Value=nil) => #24
    PropertySource<Bonsai.Sleap.PredictSinglePose,System.Nullable(System.Single)>(MemberName=PartMinConfidence, Value=nil) => #25
    #21, #22, #23, #24, #25 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as ModelFileName,
        Item2 as TrainingConfig,
        Item3 as ColorConversion,
        Item4 as ScaleFactor,
        Item5 as PartMinConfience)
    -> Take(Count=1)
    -> AsyncSubject SleapModelConfiguration

Annotation(Text="")
-> GroupWorkflow DataLoader
    SubscribeSubject CsvFileName
    -> PropertyMapping(FileName) => #1
    SubscribeSubject VideoFileName
    -> PropertyMapping(FileName)
    -> Bonsai.Vision.FileCapture => #4
      FileName=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.avi
      PlaybackRate=99999999
      StartPosition=0
      PositionUnits=Frames
      Loop=false
      Playing=true
    #1, #4 -> Bonsai.IO.CsvReader(FileName=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.csv, ScanPattern="%i %i %i %L %L ", SkipRows=0)
    -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #6
      Expression:
        new(
        Item1 as Visual,
        Item2 as Stim0,
        Item3 as Stim1,
        Item4 as FrameCounter,
        Item5 as FrameTimestamp
        )
    #4 -> Bonsai.Vision.Grayscale => #7
    #6, #7 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
      Expression:
        new(
        Item1 as Stimuli,
        Item2 as Video
        )
    -> PublishSubject Video&Stimuli => #10
    SubscribeSubject ArenaFeeds
    -> Take(Count=1) => #12
    #10, #12 -> SubscribeWhen

    Defer Background
        SubscribeSubject VideoFileName
        -> PropertyMapping(FileName) => #1
        ExternalizedMapping(NumberBackgroundFrames, PixelSearch, NoiseThreshold) => #2
        #1, #2 -> Defer CalculateBackground
            ExternalizedMapping(Value(DisplayName=NumberBackgroundFrames))
            -> IntProperty(Value=10)
            -> Take(Count=1)
            -> AsyncSubject NumberBackgroundFrames

            ExternalizedMapping(Value(DisplayName=FileName))
            -> StringProperty(Value=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.avi)
            -> Take(Count=1)
            -> AsyncSubject FileName

            SubscribeSubject FileName
            -> PropertyMapping(FileName)
            -> Bonsai.Vision.FileCapture
              FileName=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.avi
              PlaybackRate=99999999
              StartPosition=0
              PositionUnits=Frames
              Loop=false
              Playing=true
            -> Bonsai.Vision.Grayscale => #11
            ExternalizedMapping(PixelSearch, NoiseThreshold) => #12
            #11, #12 -> BonZeb.CalculateBackground(PixelSearch=Brightest, NoiseThreshold=0) => #13
            SubscribeSubject NumberBackgroundFrames
            -> PropertyMapping(Count) => #15
            #13, #15 -> Take(Count=10)
            -> Last
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> AsyncSubject BackgroundImage
    -> SelectMany FindArenas
        WorkflowInput Source1
        -> Bonsai.Vision.EqualizeHistogram
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=20000, MaxArea=200000)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> OrderBy(KeySelector="Centroid.X,Centroid.Y")
        -> Take(Count=1)
        -> WorkflowOutput
    -> AsyncSubject ArenaROIs
    -> SelectMany CropBackgrounds
        SubscribeSubject ArenaROIs
        -> Take(Count=1)
        -> Merge
        -> CreateObservable CropBackgroundArenas
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject ArenaDetection

            SubscribeSubject BackgroundImage => #3
            SubscribeSubject ArenaDetection
            -> MemberSelector(Selector=Contour.Rect)
            -> PropertyMapping(RegionOfInterest) => #6
            #3, #6 -> Bonsai.Vision.Crop(RegionOfInterest(X=682, Y=28, Width=447, Height=445))
            -> WorkflowOutput
        -> Zip
        -> Take(Count=1)
        -> WorkflowOutput
    -> AsyncSubject CroppedBackground
    -> SelectMany CreateArenaFeeds
        SubscribeSubject ArenaROIs
        -> Take(Count=1) => #1
        SubscribeSubject VideoFileName
        -> PropertyMapping(FileName) => #3
        #1, #3 -> SelectMany TrackArenas
            ExternalizedMapping(Value(DisplayName=FileName))
            -> StringProperty(Value=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FH0a.avi)
            -> Take(Count=1)
            -> AsyncSubject FileName

            SubscribeSubject CroppedBackground
            -> Merge => #5
            WorkflowInput Source1
            -> Merge => #7
            #5, #7 -> Zip
            -> CreateObservable CropCenter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> Take(Count=1)
                -> AsyncSubject ThisCropBackground

                SubscribeSubject Video&Stimuli
                -> MemberSelector(Selector=Video) => #8
                SubscribeSubject This
                -> MemberSelector(Selector=Item2.Contour.Rect) => #10
                #8, #10 -> WithLatestFrom
                -> InputMapping(Selector=Item1, RegionOfInterest(Selector=Item2))
                -> Bonsai.Vision.Crop(RegionOfInterest(X=676, Y=563, Width=449, Height=443)) => #13
                SubscribeSubject ThisCropBackground => #14
                #13, #14 -> CombineLatest
                -> Bonsai.Dsp.AbsoluteDifference => #16
                SubscribeSubject ThisCropBackground => #17
                #13, #17 -> CombineLatest
                -> MemberSelector(Selector=Item2) => #19
                SubscribeSubject This => #20
                #13, #20 -> CombineLatest
                -> MemberSelector(Selector=Item2) => #22
                #13, #16, #19, #22 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1 as RawFrame,
                    Item2 as BackgroundSubtractedFrame,
                    Item3 as RawBackground,
                    Item4 as ArenaCentroid)
                -> WorkflowOutput
            -> WorkflowOutput
        -> ToList
        -> WorkflowOutput
    -> AsyncSubject ArenaFeeds

Annotation(Text="")
-> GroupWorkflow AnalysisPipeline
    SubscribeSubject ArenaFeeds
    -> Take(Count=1)
    -> Merge
    -> ElementIndex
    -> CreateObservable ProcessSingleArenaFrames
        WorkflowInput Source1
        -> ReplaySubject Data(BufferSize=nil)

        SubscribeSubject Data
        -> MemberSelector(Selector=Index)
        -> Take(Count=1)
        -> AsyncSubject ArenaIndex

        SubscribeSubject Data
        -> MemberSelector(Selector=Value)
        -> Merge
        -> PublishSubject ArenaVideoStream

        GroupWorkflow CentroidTracking
            SubscribeSubject ArenaVideoStream
            -> MemberSelector(Selector=BackgroundSubtractedFrame) => #1
            -> Bonsai.Vision.Threshold(ThresholdValue=100, MaxValue=255, ThresholdType=Binary)
            -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
            -> Bonsai.Vision.BinaryRegionAnalysis
            -> Bonsai.Vision.LargestBinaryRegion
            -> MemberSelector(Selector=Centroid) => #6
            #1 -> Bonsai.Vision.Threshold(ThresholdValue=21, MaxValue=255, ThresholdType=Binary)
            -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
            -> Bonsai.Vision.BinaryRegionAnalysis
            -> Bonsai.Vision.LargestBinaryRegion
            -> MemberSelector(Selector=Centroid) => #11
            #6, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
              Expression:
                new(
                Item1 as SoftCentroid,
                Item2 as HardCentroid)
            -> Bonsai.Scripting.Expressions.ExpressionTransform PickBestCentroid
              Expression: it.SoftCentroid.X > 0 ? it.SoftCentroid : it.HardCentroid
            -> PublishSubject BestCentroid => #15
            SubscribeSubject BestCentroid => #16
            SubscribeSubject ArenaVideoStream
            -> MemberSelector(Selector=ArenaCentroid.Item2.Contour.Rect) => #18
            #16, #18 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.X / Item2.Width as X,
                Item1.Y / Item2.Height as Y
                )
            -> InputMapping(Selector="X,Y", X(Selector=X), Y(Selector=Y))
            -> Bonsai.Vision.CreatePoint2f(X=0.605113268, Y=0.932660043)
            -> PublishSubject NormalizedBestCentroid => #23
            #15, #23 -> Zip
            -> WorkflowOutput

        SubscribeSubject BestCentroid
        -> PublishSubject ZoomCoordinate

        GroupWorkflow SleapTracking
            SubscribeSubject CenteredVideo => #0
            SubscribeSubject SleapModelConfiguration
            -> PropertyMapping => #2
              ModelFileName(Selector=ModelFileName)
              TrainingConfig(Selector=TrainingConfig)
              PartMinConfidence(Selector=PartMinConfience)
              ScaleFactor(Selector=ScaleFactor)
              ColorConversion(Selector=ColorConversion)
            #0, #2 -> Bonsai.Sleap.PredictSinglePose
              ModelFileName=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FlyHigherTracker\FlyHigherTracker\Workflows\Extensions\modelfile.pb
              TrainingConfig=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FlyHigherTracker\FlyHigherTracker\Workflows\Extensions\training_config.json
              PartMinConfidence=nil
              ScaleFactor=nil
              ColorConversion=nil
            -> PublishSubject PoseStream

            SubscribeSubject ArenaVideoStream
            -> MemberSelector(Selector=ArenaCentroid.Item2.Contour.Rect) => #6
            SubscribeSubject PoseStream => #7
            #6, #7 -> Zip => #8
            SubscribeSubject ScalingFactor => #9
            #8, #9 -> WithLatestFrom
            -> InputMapping(Selector=Item1.Item2, CropSize(Selector="Item1.Item1.Width,Item1.Item1.Height"), ScalingFactor(Selector=Item2))
            -> NormalizeSleapOutput(CropSize(Width=449, Height=443), ScalingFactor=1)
            -> PublishSubject NormalizedPoseStream

            SubscribeSubject PoseStream => #14
            -> InferVisualizerViews => #15
              BodyPart_Left=L
              BodyPart_Right=R
              BodyPart_Top=T
              BodyPart_Bottom=B
              BodyPart_Head=H
              BodyPart_Thorax=Trx
              BodyPart_Abdomen=Abd
              BodyPart_LeftWing=Lw
              BodyPart_RightWing=Rw
            SubscribeSubject NormalizedPoseStream
            -> MemberSelector(Selector=Normalized) => #17
            #15, #14, #17 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
              Expression:
                new(Item1 as VisualizerViews,
                Item2 as Pose,
                Item3 as NormalizedPose)
            -> WorkflowOutput

        SubscribeSubject ArenaIndex => #14
        GroupWorkflow CenteredVideo => #15
            SubscribeSubject ArenaVideoStream
            -> MemberSelector(Selector=BackgroundSubtractedFrame) => #1
            SubscribeSubject ZoomCoordinate => #2
            #1, #2 -> Zip => #3
            SubscribeSubject FlyCenteredCropSize
            -> PropertyMapping(Size) => #5
            #3, #5 -> Bonsai.Vision.CropCenter(Size(Width=128, Height=128), FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
            -> PublishSubject CenteredVideo
            -> WorkflowOutput
        #14, #15 -> CombineLatest
        -> WorkflowOutput

        GroupWorkflow PixelChange
            Annotation "Append to make up for the first missing frame"(Text="")
            -> DoubleProperty(Value=NaN)
            -> Take(Count=1) => #2
            SubscribeSubject ArenaVideoStream
            -> MemberSelector(Selector=BackgroundSubtractedFrame)
            -> Bonsai.Vision.Threshold(ThresholdValue=70, MaxValue=255, ThresholdType=Binary) => #5
            -> Skip(Count=1) => #6
            #6, #5 -> Zip
            -> Bonsai.Dsp.AbsoluteDifference
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Val0) => #10
            #2, #10 -> Merge
            -> PublishSubject PixelChange
            -> WorkflowOutput

        GroupWorkflow Logging
            SubscribeSubject LoggingRootPath => #0
            SubscribeSubject ArenaIndex => #1
            #0, #1 -> Zip
            -> Format(Format={0}/Arena{1}, Selector="Item1,Item2")
            -> Take(Count=1)
            -> AsyncSubject ThisArenaPath

            GroupWorkflow Metadata
                SubscribeSubject ArenaVideoStream
                -> Take(Count=1)
                -> MemberSelector(Selector=RawBackground) => #2
                SubscribeSubject ThisArenaPath
                -> Format(Format={0}/RawBackground.png, Selector=it)
                -> PropertyMapping(FileName) => #5
                #2, #5 -> Bonsai.Vision.SaveImage(FileName="C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test-05_25_2023 09_57_21/Arena3/RawBackground.png", Suffix=None)

                SubscribeSubject ArenaVideoStream
                -> Take(Count=1)
                -> MemberSelector(Selector=ArenaCentroid) => #9
                SubscribeSubject ThisArenaPath
                -> Format(Format={0}/ArenaCentroid.csv, Selector=it)
                -> PropertyMapping(FileName) => #12
                #9, #12 -> Bonsai.IO.CsvWriter
                  FileName="C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test-05_25_2023 09_57_21/Arena3/ArenaCentroid.csv"
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

            GroupWorkflow Streams
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=RawFrame) => #1
                SubscribeSubject ThisArenaPath
                -> Format(Format={0}/RawVideo.avi, Selector=it)
                -> Take(Count=1)
                -> PropertyMapping(FileName) => #5
                #1, #5 -> Bonsai.Vision.VideoWriter
                  FileName="C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test-05_25_2023 09_57_21/Arena3/RawVideo.avi"
                  Suffix=None
                  Buffered=true
                  Overwrite=false
                  FourCC=FMP4
                  FrameRate=30
                  FrameSize(Width=0, Height=0)
                  ResizeInterpolation=NearestNeighbor

                SubscribeSubject CenteredVideo => #7
                SubscribeSubject ThisArenaPath
                -> Format(Format={0}/CenteredVideo.avi, Selector=it)
                -> Take(Count=1)
                -> PropertyMapping(FileName) => #11
                #7, #11 -> Bonsai.Vision.VideoWriter
                  FileName="C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test-05_25_2023 09_57_21/Arena3/CenteredVideo.avi"
                  Suffix=None
                  Buffered=true
                  Overwrite=false
                  FourCC=FMP4
                  FrameRate=30
                  FrameSize(Width=0, Height=0)
                  ResizeInterpolation=NearestNeighbor

                SubscribeSubject BestCentroid => #13
                SubscribeSubject NormalizedBestCentroid => #14
                #13, #14 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #16
                  Expression: new(Item1 as Centroid, Item2 as NormalizedCentroid)
                SubscribeSubject ThisArenaPath
                -> Format(Format={0}/BestCentroid.csv, Selector=it)
                -> PropertyMapping(FileName) => #19
                #16, #19 -> Bonsai.IO.CsvWriter
                  FileName="C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test-05_25_2023 09_57_21/Arena3/BestCentroid.csv"
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

                SubscribeSubject PixelChange
                -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #22
                  Expression: new(it as PixelChange)
                SubscribeSubject ThisArenaPath
                -> Format(Format={0}/PixelChange.csv, Selector=it)
                -> PropertyMapping(FileName) => #25
                #22, #25 -> Bonsai.IO.CsvWriter
                  FileName="C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test-05_25_2023 09_57_21/Arena3/PixelChange.csv"
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

                SubscribeSubject NormalizedPoseStream
                -> MemberSelector(Selector=Normalized)
                -> Merge
                -> GroupBy(KeySelector=Name)
                -> SelectMany LogSleapDemux
                    WorkflowInput Source1
                    -> ReplaySubject Data(BufferSize=nil)

                    SubscribeSubject Data
                    -> MemberSelector(Selector=Key)
                    -> AsyncSubject BodyPart

                    SubscribeSubject Data
                    -> Merge
                    -> MemberSelector(Selector="Position,Confidence")
                    -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #8
                      Expression:
                        new(
                        Item1 as Position,
                        Item2 as Confidence)
                    SubscribeSubject ThisArenaPath => #9
                    SubscribeSubject BodyPart => #10
                    ExternalizedMapping(Value(DisplayName=PrefixName))
                    -> StringProperty(Value=NormalizedSleap) => #12
                    #9, #10, #12 -> Zip
                    -> Format(Format={0}/{2}_{1}.csv, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #15
                    #8, #15 -> Bonsai.IO.CsvWriter
                      FileName="C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test-05_25_2023 09_57_21/Arena3/NormalizedSleap_B.csv"
                      Append=false
                      Overwrite=false
                      Suffix=None
                      IncludeHeader=true

                SubscribeSubject PoseStream
                -> Merge
                -> GroupBy(KeySelector=Name)
                -> SelectMany LogSleapDemux
                    WorkflowInput Source1
                    -> ReplaySubject Data(BufferSize=nil)

                    SubscribeSubject Data
                    -> MemberSelector(Selector=Key)
                    -> AsyncSubject BodyPart

                    SubscribeSubject Data
                    -> Merge
                    -> MemberSelector(Selector="Position,Confidence")
                    -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #8
                      Expression:
                        new(
                        Item1 as Position,
                        Item2 as Confidence)
                    SubscribeSubject ThisArenaPath => #9
                    SubscribeSubject BodyPart => #10
                    ExternalizedMapping(Value(DisplayName=PrefixName))
                    -> StringProperty(Value=Sleap) => #12
                    #9, #10, #12 -> Zip
                    -> Format(Format={0}/{2}_{1}.csv, Selector="Item1,Item2,Item3")
                    -> PropertyMapping(FileName) => #15
                    #8, #15 -> Bonsai.IO.CsvWriter
                      FileName="C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\Test-05_25_2023 09_57_21/Arena3/Sleap_B.csv"
                      Append=false
                      Overwrite=false
                      Suffix=None
                      IncludeHeader=true
    -> Merge
    -> WorkflowOutput
-> GroupBy(KeySelector=Item1)
-> Condition
    WorkflowInput Source1
    -> MemberSelector(Selector=Key)
    -> Equal(Operand=IntProperty(Value=0))
    -> WorkflowOutput
-> Merge
-> MemberSelector(Selector=Item2)

GroupWorkflow Visualizers
    SubscribeSubject ArenaFeeds
    -> Index(Operand=IntProperty(Value=0))
    -> Merge
    -> MemberSelector(Selector=BackgroundSubtractedFrame)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #4
    SubscribeSubject ArenaFeeds
    -> Index(Operand=IntProperty(Value=1))
    -> Merge
    -> MemberSelector(Selector=BackgroundSubtractedFrame)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #9
    SubscribeSubject ArenaFeeds
    -> Index(Operand=IntProperty(Value=2))
    -> Merge
    -> MemberSelector(Selector=BackgroundSubtractedFrame)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #14
    SubscribeSubject ArenaFeeds
    -> Index(Operand=IntProperty(Value=3))
    -> Merge
    -> MemberSelector(Selector=BackgroundSubtractedFrame)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #19
    #4, #9, #14, #19 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
