<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-alpha015"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\BonFlyResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-27.185</Left>
        <Right>27.185</Right>
        <Bottom>-15.13</Bottom>
        <Top>15.13</Top>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\BonFlyView.bonsai">
        <Left>-27.185</Left>
        <Right>27.185</Right>
        <Bottom>-15.13</Bottom>
        <Top>15.13</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>SyncState</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SyncState</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it ? 1 : 0</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorR" />
          <Property Name="ColorG" />
          <Property Name="ColorB" />
          <Property Name="ColorA" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialize</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>Time of Loom.csv</io:FileName>
              <io:ScanPattern>%f,%i</io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TrialSettings</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevice</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>LedBoardCommands</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>Off</harp:OperationLed>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:VisualIndicators>Off</harp:VisualIndicators>
                      <harp:Heartbeat>Disabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM3</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LedBoardEvents</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p1:LedArrayCommand">
                    <p1:Type>SetAuxiliaryOutput</p1:Type>
                    <p1:Mask>Index1</p1:Mask>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LedBoardCommands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Video</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="spk:SpinnakerCapture">
                      <spk:Index xsi:nil="true" />
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Video</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>SubscribedVideo</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>36600</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Delay">
          <gl:DueTime>PT1S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SessionTimer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TimeStep.ElapsedRealTime</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>SessionTimer</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EndExperimentRoutine</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>IR LEDs</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="harp:CreateMessage">
                    <harp:Payload xsi:type="harp:CreateMessagePayload">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Address>61</harp:Address>
                      <harp:PayloadType>U8</harp:PayloadType>
                      <harp:Value>8</harp:Value>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0.1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>LedBoardCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>FilesWriter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Path" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="io:GetDirectories,sys:String">
                    <MemberName>Path</MemberName>
                    <Value>C:\Users\neurogears\Documents\git\MoitaLab</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>RootPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SessionName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Fly123</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>SessionName</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SubscribedVideo</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Image</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>GenerateName</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RootPath</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionName</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}/{1}_camera.avi</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName>C:\Users\Admin\Desktop\AllRight\ForReal\CS_WALL_CTRL-6days-20CTRL-FH0-.AVI</cv:FileName>
                      <cv:Suffix>Timestamp</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>60</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SubscribedVideo</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ChunkData</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>GenerateName</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RootPath</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionName</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}/{1}_camera.csv</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Users\Admin\Desktop\AllRight\ForReal\CS_WALL_CTRL-6days-20CTRL-FH0-.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="12" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="18" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="17" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source3" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Looming</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialSettings</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="TrialType" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>DrawNoisyCircle</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TrialSettings</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoomRangeAnimation.bonsai">
                    <Duration>PT0S</Duration>
                    <MaxRadius>25</MaxRadius>
                    <MonitorDistance>18</MonitorDistance>
                    <InitialRadius>0.5</InitialRadius>
                    <InitialVirtualDistance>12.5</InitialVirtualDistance>
                    <LinearApproachingVelocity>25</LinearApproachingVelocity>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Diameter" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawCircleWithNoise.bonsai">
                    <Diameter>0.1</Diameter>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <OnColorR>0</OnColorR>
                    <OnColorG>0</OnColorG>
                    <OnColorB>0</OnColorB>
                    <OnColorA>1</OnColorA>
                    <OffColorR>1</OffColorR>
                    <OffColorG>1</OffColorG>
                    <OffColorB>1</OffColorB>
                    <OffColorA>1</OffColorA>
                    <Contrast>0.5</Contrast>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="13" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="TrialType" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>DrawLoomingCircle</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TrialSettings</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoomRangeAnimation.bonsai">
                    <Duration>PT0S</Duration>
                    <MaxRadius>25</MaxRadius>
                    <MonitorDistance>18</MonitorDistance>
                    <InitialRadius>0.5</InitialRadius>
                    <InitialVirtualDistance>12.5</InitialVirtualDistance>
                    <LinearApproachingVelocity>25</LinearApproachingVelocity>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ExtentX" Selector="it" />
                      <Property Name="ExtentY" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
                    <TextureName />
                    <ExtentX>1</ExtentX>
                    <ExtentY>1</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ScaleX>1</ScaleX>
                    <ScaleY>1</ScaleY>
                    <ShiftX>0</ShiftX>
                    <ShiftY>0</ShiftY>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="13" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="TrialType" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>DrawLoomingCircle</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TrialSettings</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoomRangeAnimation.bonsai">
                    <Duration>PT0S</Duration>
                    <MaxRadius>25</MaxRadius>
                    <MonitorDistance>18</MonitorDistance>
                    <InitialRadius>0.5</InitialRadius>
                    <InitialVirtualDistance>12.5</InitialVirtualDistance>
                    <LinearApproachingVelocity>25</LinearApproachingVelocity>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Diameter" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <Diameter>0.1</Diameter>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="13" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Visualizers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Video</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionTimer</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Video</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ChunkData.LineStatusAll</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="14" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>